opentrons/protocol-designer 4.0.0
schemaVersion: 4
protocolName: Station_C_46_v6_5_col
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p10_multi: {mount: left}
  p20_single_gen2: {mount: right}
modules:
  temperatureModuleV1: {slot: 6}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  pcr: {definitionId: custom_beta/appliedbiosystems_96_wellplate_100ul/1, slot: temperatureModuleV1}
  sample: {definitionId: custom_beta/axygen_96_aluminumblock_200ul/1, slot: 2}
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, slot: 1}
  Opentrons 96 Filter Tip Rack 20 µL (slot 4): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 4}
  Opentrons 96 Filter Tip Rack 20 µL (slot 7): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 7}
  Opentrons 96 Filter Tip Rack 20 µL (slot 10): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 10}
  Opentrons 96 Filter Tip Rack 20 µL (slot 11): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 11}
  Axygen On A Deep Well 96 Well Plate 200 µL: {definitionId: custom_beta/axygenonadeepwell_96_wellplate_200ul/1, slot: 8}
pipetteTiprackAssignments:
  p10_multi: opentrons/opentrons_96_filtertiprack_20ul/1
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - N1_master_mix
  - Rp_master_mix
  - Sample: {serialize: true}
  - Nuclease_free_water
  - N1_positive_plasmid
  - Rp_positive_plasmid
ingredLocations:
  sample:
    Sample {volume: 40}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap:
    Nuclease_free_water {volume: 500}: A1
    N1_positive_plasmid {volume: 100}: A2
    Rp_positive_plasmid {volume: 100}: A3
  Axygen On A Deep Well 96 Well Plate 200 µL:
    N1_master_mix {volume: 100}: A1-H1
    Rp_master_mix {volume: 100}: A2-H2
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV1
  setTemperature: true
  targetTemperature: 4
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 40
  path: single
  changeTip: always
  aspirate_labware: sample
  aspirate_wells: G4, H4
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 15
  path: single
  changeTip: perDest
  aspirate_labware: Axygen On A Deep Well 96 Well Plate 200 µL
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: pcr
  dispense_wells: A1-A5
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 15
  path: single
  changeTip: perDest
  aspirate_labware: Axygen On A Deep Well 96 Well Plate 200 µL
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: pcr
  dispense_wells: A6-A10
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: sample
  aspirate_wells: A1-A5
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  aspirate_mix_checkbox: true
  aspirate_mmFromBottom: 3
  dispense_labware: pcr
  dispense_wells: A1-A5
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 10
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: sample
  aspirate_wells: A1-A5
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  aspirate_mmFromBottom: 3
  dispense_labware: pcr
  dispense_wells: A6-A10
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 10
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 2
  dispense_labware: pcr
  dispense_wells: G4
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 10
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
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  aspirate_mmFromBottom: 2
  dispense_labware: pcr
  dispense_wells: G9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 10
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 2
  dispense_labware: pcr
  dispense_wells: H4, H9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 10
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/appliedbiosystems_96_wellplate_100ul/1:
    brand: {brand: Applied Biosystems, brandId: [PCR compatible 96-well reaction plate]}
    metadata: {displayName: Applied Biosystems 96 Well Plate 100 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 17.14}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: appliedbiosystems_96_wellplate_100ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 16.4, totalLiquidVolume: 100, shape: circular, diameter: 5.49, x: 14.38, y: 74.24, z: 0.74}
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  custom_beta/axygen_96_aluminumblock_200ul/1:
    brand: {brand: AXYGEN, brandId: [PCR-96M2-HS-C]}
    metadata: {displayName: AXYGEN 96 Aluminum Block 200 µL, displayCategory: aluminumBlock, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.75, yDimension: 85.5, zDimension: 27.19}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: axygen_96_aluminumblock_200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 21, totalLiquidVolume: 200, shape: circular, diameter: 5.3, x: 14.38, y: 74.25, z: 6.19}
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  custom_beta/axygenonadeepwell_96_wellplate_200ul/1:
    brand: {brand: axygen on a deep well, brandId: []}
    metadata: {displayName: Axygen On A Deep Well 96 Well Plate 200 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 44.6}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: axygenonadeepwell_96_wellplate_200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 21, totalLiquidVolume: 200, shape: circular, diameter: 5.3, x: 8.8, y: 74.65, z: 23.6}
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commands:
- temperatureModule/setTargetTemperature: {module: temperatureModuleV1, temperature: 4}
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL (slot 4), well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: sample, well: G4, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 20, labware: Trash, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- blowout: {pipette: p20_single_gen2, labware: Trash, well: A1, flowRate: 3.78, offsetFromBottomMm: 0}
- dropTip: {pipette: p20_single_gen2, labware: Trash, well: A1}
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